/*
 * Macro to count phytoplankton. Creates table with all measurements, single image measurements and summary.
 * 
 * Please cite Fiji and Yen thresholding method if you use this macro in your research.
 * 
 * Also, please acknowledge me for using the macro. Many thanks :D
 * 
 * José Serrado Marques
 * 2022-05-13
 * jpmarques@igc.gulbenkian.pt
 * 
 */

// initialize
var min_circ = 0.80;

// variables
extensions_array = newArray(".png");

// paths
input = getDir("folder with images");
name_input = File.getNameWithoutExtension(input);
list_files = getFileList(input);
output = input + "Masks_ROIs_tables";
File.makeDirectory(output);

// create table to have all tables  
all_results_table = "all_phyto_counts";
Table.create(all_results_table);

// loop through images
setBatchMode("hide");
start_time = getTime();

for (i = 0; i < list_files.length; i++) {
	current_file = list_files[i];
	path_current = input + current_file;
	if (desiredFileExtensions(current_file, extensions_array)) {
		// open file
		open(path_current);
		// process file
		processFile(output, all_results_table);
	}
}

// save big table and summarize
Table.save(input + name_input + "_summarized_table.csv", "Summary");
Table.save(input + name_input + "_all_images_table.csv", all_results_table);

end_time = getTime();
runtime(start_time, end_time);

// functions

function processFile(output, all_results_table) {
	// process each file and save output	
	
	// get names
	img = getTitle();
	img_name = File.getNameWithoutExtension(img);
	base_save_name = output + File.separator + img_name;
	run("Set Scale...", "distance=732.2213 known=100 unit=um global"); // measured from 10µm scale on a 40x objective
	run("Set Measurements...", "area mean standard perimeter fit shape redirect=" + img + " decimal=4");
	getPixelSize(unit, pixelWidth, pixelHeight);
	
	// run color threshold
	run("Duplicate...", "duplicate");
	colorThreshold();
	
	// binary operations
	run("Fill Holes");
	run("Open");
	
	// calibrate binary image
	Stack.setXUnit(unit);
	run("Properties...", "pixel_width=" + pixelWidth + " pixel_height=" + pixelHeight);
	
	// analyze particles
	run("Analyze Particles...", "size=20-100 circularity=" + min_circ + "-1.00 show=Nothing display exclude clear summarize add");
	
	// rename ROIs and create column with name info
	n = roiManager("count");
	if (n>0) {
		for (i = 0; i < n; i++) {
			roiManager("select", i);
			roiManager("rename", "phyto_" + (i+1));
			setResult("Image Name", i, img_name + "_phyto_" + (i+1));
		}
		// put ROIs overlay on RGB image
		selectWindow(img);
		run("Duplicate...", "title=" + img_name + "overlay");
		roiManager("deselect");
		roiManager("show all with labels");
		run("Flatten");
		burned_overlay = getTitle();
		
		// table concatenation
		concatTables(all_results_table);
		
		// save stuff
		// ROIs
		roiManager("deselect");
		roiManager("save", base_save_name + "_ROIs.zip");
		// Results
		selectWindow("Results");
		saveAs("results", base_save_name + "_results_table.csv");
		// mask image
		selectWindow(burned_overlay);
		saveAs("tiff", base_save_name + "_cell_mask.tif");
		
		// close roi manager
		roiManager("deselect");
		roiManager("delete");
	}
	
	// close all
	run("Clear Results");
	close("*");
}


function desiredFileExtensions(file_name, extensions_array) {
	// this is in the case of union, meaning the file needs to be one of the presented file extensions
	for (i = 0; i < extensions_array.length; i++) {
		if (endsWith(file_name, extensions_array[i])) {
			return true;
		}
	}
	// returns false to not run the processFile function for the particular file
	return false;
}

function concatTables(all_results_table) {
	// an attempet at a modular creation of table concatenation
	
	// get current big table size
	last_table_size = Table.size(all_results_table);
	
	// get headings from Resuts table
	headings = split(String.getResultsHeadings, "\t");
	for (i = 0; i < nResults(); i++) {
		for (j = 0; j < headings.length; j++) {
			value = getResult(headings[j], i);
			// "value" might be a string
			if (isNaN(value)) {
				value = getResultString(headings[j], i);
			}
			Table.set(headings[j], i + last_table_size, value, all_results_table);
		}
	}
	
	Table.update(all_results_table);
}

function colorThreshold() {
// creates binary mask from RGB image. this replaces color deconvolution and thresholding
// Color Thresholder 2.3.0/1.53q
// Autogenerated macro, single images only!
min=newArray(3);
max=newArray(3);
filter=newArray(3);
a=getTitle();
run("RGB Stack");
run("Convert Stack to Images");
selectWindow("Red");
rename("0");
selectWindow("Green");
rename("1");
selectWindow("Blue");
rename("2");
min[0]=0;
max[0]=114;
filter[0]="pass";
min[1]=0;
max[1]=112;
filter[1]="pass";
min[2]=0;
max[2]=100;
filter[2]="pass";
for (i=0;i<3;i++){
  selectWindow(""+i);
  setThreshold(min[i], max[i]);
  run("Convert to Mask");
  if (filter[i]=="stop")  run("Invert");
}
imageCalculator("AND create", "0","1");
imageCalculator("AND create", "Result of 0","2");
for (i=0;i<3;i++){
  selectWindow(""+i);
  close();
}
selectWindow("Result of 0");
close();
selectWindow("Result of Result of 0");
rename(a);
// Colour Thresholding-------------
}

function runtime(start_time, end_time) { 
	// print time in minutes and seconds
	total_time = end_time - start_time;
	minutes_remanider = total_time % (60 * 1000);
	minutes = (total_time - minutes_remanider) / (60 * 1000);
	seconds = minutes_remanider / 1000;
	print("Macro runtime was " + minutes + " minutes and " + seconds + " seconds.");
}



